PsychoPy2experiment version="2023.1.3"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = magic_trick_rebuild
  keyboardBackend = ioHub
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Routines
  Routine instructions
    CodeComponent create_lists
      Code Type = Auto->JS
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      Before Experiment:
        import random as rn
      Begin Experiment:
        cards = ["2_of_clubs","3_of_clubs","4_of_clubs","5_of_clubs","6_of_clubs",
        "7_of_clubs","8_of_clubs","9_of_clubs","10_of_clubs","jack_of_clubs","queen_of_clubs",
        "king_of_clubs","ace_of_clubs",
        "2_of_diamonds","3_of_diamonds","4_of_diamonds","5_of_diamonds","6_of_diamonds",
        "7_of_diamonds","8_of_diamonds","9_of_diamonds","10_of_diamonds","jack_of_diamonds",
        "queen_of_diamonds","king_of_diamonds","ace_of_diamonds",
        "2_of_hearts","3_of_hearts","4_of_hearts","5_of_hearts","6_of_hearts",
        "7_of_hearts","8_of_hearts","9_of_hearts","10_of_hearts","jack_of_hearts",
        "queen_of_hearts","king_of_hearts","ace_of_hearts",
        "2_of_spades","3_of_spades","4_of_spades","5_of_spades","6_of_spades",
        "7_of_spades","8_of_spades","9_of_spades","10_of_spades","jack_of_spades",
        "queen_of_spades","king_of_spades","ace_of_spades"
        ]


        positions = [[-0.25, -0.3], [-0.25, 0], [-0.25, 0.3],
        [0,-0.3],[0,0],[0,0.3],[0.25,-0.3],[0.25,0],[0.25,0.3]]
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this experiment!

        On the next page you will be presented a random selection of 9 playing cards.

        Please choose one of those cards as your card and remember it during this experiment.

        Press space to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine choose_card
    CodeComponent preselect_cards
      Code Type = Auto->JS
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      Begin Routine:
        rn.shuffle(cards)
        rn.shuffle(positions)
        pull = []
        for x in cards[:9]:
            pull.append(x)
      End Routine:
        pull = pull
    TextComponent text_3
      letterHeight = 0.03
      pos = (0, 0.47)
      startVal [time (s)] = 0.0
      text = Choose a card. Press space to continue
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent card_1
      image [set every repeat] = $pull[0]
      pos [set every repeat] = positions[0]
      size = 0.2,0.266
      startVal [time (s)] = 0.0
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    ImageComponent card_2
      image [set every repeat] = $pull[1]
      pos [set every repeat] = positions[1]
      size = 0.2,0.266
      startVal [time (s)] = 0.0
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    ImageComponent card_3
      image [set every repeat] = $pull[2]
      pos [set every repeat] = positions[2]
      size = 0.2,0.266
      startVal [time (s)] = 0.0
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    ImageComponent card_4
      image [set every repeat] = $pull[3]
      pos [set every repeat] = positions[3]
      size = 0.2,0.266
      startVal [time (s)] = 0.0
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    ImageComponent card_5
      image [set every repeat] = $pull[4]
      pos [set every repeat] = positions[4]
      size = 0.2,0.266
      startVal [time (s)] = 0.0
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    ImageComponent card_6
      image [set every repeat] = $pull[5]
      pos [set every repeat] = positions[5]
      size = 0.2,0.266
      startVal [time (s)] = 0.0
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    ImageComponent card_7
      image [set every repeat] = $pull[6]
      pos [set every repeat] = positions[6]
      size = 0.2,0.266
      startVal [time (s)] = 0.0
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    ImageComponent card_8
      image [set every repeat] = $pull[7]
      pos [set every repeat] = positions[7]
      size = 0.2,0.266
      startVal [time (s)] = 0.0
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    ImageComponent card_9
      image [set every repeat] = $pull[8]
      pos [set every repeat] = positions[8]
      size = 0.2,0.266
      startVal [time (s)] = 0.0
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  Routine show_cards
    CodeComponent pull_random_card
      Code Type = Auto->JS
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      Begin Experiment:
        counter = 0
        card_shown = ""
        cards_shown = []
      Begin Routine:
        rn.shuffle(pull)
        card_shown = pull[0]
        cards_shown.append(card_shown)
        counter = cards_shown.count(card_shown)
        while counter >= 21:
            rn.shuffle(pull)
            card_shown = pull[0]
            cards_shown.append(card_shown)
            counter = cards_shown.count(card_shown)
    CodeComponent push_marker
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet, local_clock
      Begin Experiment:
        marker_info = StreamInfo('PsychoPy', 'Markers', 1, 0, 'int32', 'uniqueid123456')
        marker_outlet = StreamOutlet(marker_info)

        marker_dict = {
        "2_of_clubs": 12,"3_of_clubs": 13,
        "4_of_clubs": 14,"5_of_clubs": 15,
        "6_of_clubs": 16, "7_of_clubs": 17,
        "8_of_clubs": 18,"9_of_clubs": 19,
        "10_of_clubs": 110,"jack_of_clubs": 111,
        "queen_of_clubs": 112,"king_of_clubs": 113,
        "ace_of_clubs": 114,
        "2_of_diamonds": 22,"3_of_diamonds": 23,
        "4_of_diamonds": 24,"5_of_diamonds": 25,
        "6_of_diamonds": 26,"7_of_diamonds": 27,
        "8_of_diamonds": 28,"9_of_diamonds": 29,
        "10_of_diamonds": 210,"jack_of_diamonds": 211,
        "queen_of_diamonds": 212,"king_of_diamonds": 213,
        "ace_of_diamonds": 214,
        "2_of_hearts": 32,"3_of_hearts": 33,
        "4_of_hearts": 34,"5_of_hearts": 35,
        "6_of_hearts": 36,"7_of_hearts": 37,
        "8_of_hearts": 38,"9_of_hearts": 39,
        "10_of_hearts": 310, "jack_of_hearts": 311,
        "queen_of_hearts": 312,"king_of_hearts": 313,
        "ace_of_hearts": 314,
        "2_of_spades": 42,"3_of_spades": 43,
        "4_of_spades": 44,"5_of_spades": 45,
        "6_of_spades": 46,"7_of_spades": 47,
        "8_of_spades": 48,"9_of_spades": 49,
        "10_of_spades": 410,"jack_of_spades": 411,
        "queen_of_spades": 412,"king_of_spades": 413,
        "ace_of_spades": 414}
      Begin Routine:
        marker = pull[0]
        ts = local_clock()
        marker_outlet.push_sample([marker_dict[marker]], ts)
    ImageComponent a_card
      image [set every repeat] = $card_shown
      size = (0.2, 0.266)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine blank
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine instructions_2
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Got a card? Perfect!

        Please write down the name of your card so it can be recognized later.

        We will now present you each of the cards several times for one second each. Whenever YOUR CARD appears, please count silently how often it appeared during this presentation.

        The presentation will go on for about 5 minutes. When you are ready, press space to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initial_fixation
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
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  Routine thanks
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        We will now analyze your data, to determine which card you picked.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine choose_card
  Routine instructions_2
  Routine initial_fixation
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 180
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    Routine blank
    Routine show_cards
  LoopTerminator trials
  Routine thanks
